<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:AindBehaviorRigCalibration.AindManipulatorCalibration;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p2="clr-namespace:Harp.StepperDriver;assembly=Harp.StepperDriver"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p3="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:ReadAllText">
          <io:Path>C:\git\AllenNeuralDynamics\Aind.Behavior.Services\local\aind_manipulator.json</io:Path>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:DeserializeFromJson">
        <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindManipulatorCalibrationModel" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Calibration.Input</Selector>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>Settings</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>AxisConfiguration</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:ToDictionary">
        <rx:KeySelector>Axis</rx:KeySelector>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>AxesConfiguration</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>StepperDriverCommands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Enabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM8</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:FilterRegister">
        <harp:FilterType>Exclude</harp:FilterType>
        <harp:Register xsi:type="harp:FilterRegisterAddress">
          <harp:Address>15</harp:Address>
        </harp:Register>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>StepperDriverEvents</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>OperationControl</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>StepperDriverEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>DeviceConfig</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StepperDriverEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p2:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p2:CreateInterlockEnabledPayload">
                      <p2:InterlockEnabled>Open</p2:InterlockEnabled>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StepperDriverCommands</Name>
                  </Expression>
                  <Expression xsi:type="p2:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p2:CreateEnableDigitalInputsPayload">
                      <p2:EnableDigitalInputs>Input0 Input1 Input2 Input3</p2:EnableDigitalInputs>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StepperDriverCommands</Name>
                  </Expression>
                  <Expression xsi:type="p2:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p2:CreateAccumulatedStepsSamplingRatePayload">
                      <p2:AccumulatedStepsSamplingRate>Rate10Hz</p2:AccumulatedStepsSamplingRate>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StepperDriverCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>ConfigureAll</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Settings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AxisConfiguration</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Axis</Selector>
                        </Expression>
                        <Expression xsi:type="InputMapping">
                          <PropertyMappings>
                            <Property Name="Value" Selector="value__" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>4</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>ConfigureSingle</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>Motor</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Motor</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Motor</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="MicrostepResolution" Selector="MicrostepResolution" />
                            <Property Name="StepInterval" Selector="StepInterval" />
                            <Property Name="StepIntervalAcceleration" Selector="StepAccelerationInterval" />
                            <Property Name="OperationMode" Selector="MotorOperationMode" />
                            <Property Name="MaximumStepInterval" Selector="MaximumStepInterval" />
                            <Property Name="Motor" Selector="Axis" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\ConfigureMotor.bonsai">
                          <Motor>Motor2</Motor>
                          <MicrostepResolution>Microstep8</MicrostepResolution>
                          <StepInterval>100</StepInterval>
                          <StepIntervalAcceleration>100</StepIntervalAcceleration>
                          <OperationMode>QuietMode</OperationMode>
                          <MaximumStepInterval>2000</MaximumStepInterval>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="6" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:LastOrDefault" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Enable/Disable Motors</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="ByteProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Settings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AxisConfiguration</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Axis</Selector>
                  </Expression>
                  <Expression xsi:type="Subtract">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="p1:Axis">
                      <Value>_1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="ByteProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Value" Selector="Item2" />
                    </PropertyMappings>
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="LeftShift">
                    <Value>3</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Sum" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="p2:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="p2:EnableDriver" />
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="p2:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="p2:DisableDriver" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StepperDriverCommands</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="11" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="6" To="8" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="13" To="15" Label="Source1" />
                  <Edge From="14" To="17" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source2" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>IsConfigured</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:ManipulatorPosition">
              <rx:Name>GoToPosition</rx:Name>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Motor0" Selector="Y1" />
                <Property Name="Motor1" Selector="Y2" />
                <Property Name="Motor2" Selector="X" />
                <Property Name="Motor3" Selector="Z" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreateMoveAbsolutePayload">
                <p2:Motor0>0</p2:Motor0>
                <p2:Motor1>0</p2:Motor1>
                <p2:Motor2>0</p2:Motor2>
                <p2:Motor3>10000</p2:Motor3>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StepperDriverCommands</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:ManipulatorPosition">
              <rx:Name>MoveRelativePosition</rx:Name>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Motor0" Selector="Y1" />
                <Property Name="Motor1" Selector="Y2" />
                <Property Name="Motor2" Selector="X" />
                <Property Name="Motor3" Selector="Z" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreateMoveRelativePayload">
                <p2:Motor0>0</p2:Motor0>
                <p2:Motor1>0</p2:Motor1>
                <p2:Motor2>0</p2:Motor2>
                <p2:Motor3>0</p2:Motor3>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StepperDriverCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
              <rx:Name>Home</rx:Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>HomeAll</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Settings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HomingOrder</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>AxesConfiguration</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>IndexAxis</scr:Name>
                    <scr:Expression>it.Item2[it.Item1]</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Axis.value__</Selector>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="IntProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>HomeSingle</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>Motor</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Motor</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Motor</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Motor" Selector="Axis" />
                            <Property Name="MinLimit" Selector="MinLimit" />
                            <Property Name="MaxLimit" Selector="MaxLimit" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\HomeAxis.bonsai">
                          <Motor>None</Motor>
                          <MinLimit>1</MinLimit>
                          <MaxLimit>22000</MaxLimit>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="6" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:LastOrDefault" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>IsHomed</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>GoToInitialPosition</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Settings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>InitialPosition</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>GoToPosition</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
              <rx:Name>StopMotors</rx:Name>
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreateStopMotorsPayload">
                <p2:StopMotors>Motor0 Motor1 Motor2 Motor3</p2:StopMotors>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StepperDriverCommands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StepperDriverEvents</Name>
            </Expression>
            <Expression xsi:type="p2:Parse">
              <harp:Register xsi:type="p2:AccumulatedSteps" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="X" Selector="Motor2" />
                <Property Name="Y1" Selector="Motor0" />
                <Property Name="Y2" Selector="Motor1" />
                <Property Name="Z" Selector="Motor3" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:ManipulatorPosition">
                <p1:X>0</p1:X>
                <p1:Y1>0</p1:Y1>
                <p1:Y2>0</p1:Y2>
                <p1:Z>0</p1:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0.01S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="X" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:ManipulatorPosition">
                <p1:X>2146</p1:X>
                <p1:Y1>0</p1:Y1>
                <p1:Y2>0</p1:Y2>
                <p1:Z>0</p1:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ManipulatorPosition</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Equal" />
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>IsMoving</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="20" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="33" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source2" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="34" To="36" Label="Source2" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>MotorGui</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Stop</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 48pt, style=Bold, Underline</gui:Font>
              <gui:Text>STOP!</gui:Text>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="MulticastSubject">
              <Name>StopMotors</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping">
              <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:ButtonVisualizer" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>OffsetPositionUI</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="gui:PropertyGridBuilder">
                    <gui:Name>ManipulatorOffsetProperty</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Font>Microsoft Sans Serif, 22pt</gui:Font>
                    <gui:HelpVisible>false</gui:HelpVisible>
                    <gui:ToolbarVisible>true</gui:ToolbarVisible>
                    <gui:AutoRefresh>false</gui:AutoRefresh>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:PropertyGridVisualizer" />
                  </Expression>
                  <Expression xsi:type="gui:ButtonBuilder">
                    <gui:Name>-X</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>-X</gui:Text>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>UIOffset</Name>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:ButtonVisualizer" />
                  </Expression>
                  <Expression xsi:type="gui:ButtonBuilder">
                    <gui:Name>+X</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>+X</gui:Text>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>UIOffset</Name>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:ButtonVisualizer" />
                  </Expression>
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>2</gui:ColumnCount>
                    <gui:RowCount>1</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles />
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:TableLayoutPanelVisualizer" />
                  </Expression>
                  <Expression xsi:type="gui:ButtonBuilder">
                    <gui:Name>-Y1</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>-Y1</gui:Text>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>UIOffset</Name>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:ButtonVisualizer" />
                  </Expression>
                  <Expression xsi:type="gui:ButtonBuilder">
                    <gui:Name>+Y1</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>+Y1</gui:Text>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>UIOffset</Name>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:ButtonVisualizer" />
                  </Expression>
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>2</gui:ColumnCount>
                    <gui:RowCount>1</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles />
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:TableLayoutPanelVisualizer" />
                  </Expression>
                  <Expression xsi:type="gui:ButtonBuilder">
                    <gui:Name>-Y2</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>-Y2</gui:Text>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>UIOffset</Name>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:ButtonVisualizer" />
                  </Expression>
                  <Expression xsi:type="gui:ButtonBuilder">
                    <gui:Name>+Y2</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>+Y2</gui:Text>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>UIOffset</Name>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:ButtonVisualizer" />
                  </Expression>
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>2</gui:ColumnCount>
                    <gui:RowCount>1</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles />
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:TableLayoutPanelVisualizer" />
                  </Expression>
                  <Expression xsi:type="gui:ButtonBuilder">
                    <gui:Name>-Z</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>-Z</gui:Text>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>UIOffset</Name>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:ButtonVisualizer" />
                  </Expression>
                  <Expression xsi:type="gui:ButtonBuilder">
                    <gui:Name>+Z</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>+Z</gui:Text>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>UIOffset</Name>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:ButtonVisualizer" />
                  </Expression>
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>2</gui:ColumnCount>
                    <gui:RowCount>1</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles />
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:TableLayoutPanelVisualizer" />
                  </Expression>
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Name>ManipulatorOffsetButton</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Font>Microsoft Sans Serif, 36pt</gui:Font>
                    <gui:ColumnCount>1</gui:ColumnCount>
                    <gui:RowCount>4</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles />
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:TableLayoutPanelVisualizer" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsHomed</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Enabled" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Name>ManipulatorOffset</gui:Name>
                    <gui:Enabled>false</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>1</gui:ColumnCount>
                    <gui:RowCount>2</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles>
                      <gui:RowStyle>
                        <gui:SizeType>Percent</gui:SizeType>
                        <gui:Height>0.3</gui:Height>
                      </gui:RowStyle>
                      <gui:RowStyle>
                        <gui:SizeType>Percent</gui:SizeType>
                        <gui:Height>0.7</gui:Height>
                      </gui:RowStyle>
                    </gui:RowStyles>
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
                    <rx:Name>UIOffset</rx:Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>DetermineSign</scr:Name>
                    <scr:Expression>it[0] == '+' ? 1.0 : -1.0</scr:Expression>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>RemoveSign</scr:Name>
                    <scr:Expression>it.substring(1)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="X" Category="OffsetGain" />
                    <Property Name="Y1" Category="OffsetGain" />
                    <Property Name="Y2" Category="OffsetGain" />
                    <Property Name="Z" Category="OffsetGain" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:ManipulatorPosition">
                      <p1:X>1</p1:X>
                      <p1:Y1>1</p1:Y1>
                      <p1:Y2>1</p1:Y2>
                      <p1:Z>1</p1:Z>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>DetermineAxis</scr:Name>
                    <scr:Expression>new(
Item2 == "Y1" ? Item1 * Item3.Y1 : 0 as Y1,
Item2 == "Y2" ? Item1 * Item3.Y2: 0 as Y2,
Item2 == "X" ? Item1 * Item3.X: 0 as X,
Item2 == "Z" ? Item1 * Item3.Z: 0 as Z)
</scr:Expression>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="X" Selector="X" />
                      <Property Name="Y1" Selector="Y1" />
                      <Property Name="Y2" Selector="Y2" />
                      <Property Name="Z" Selector="Z" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:ManipulatorPosition">
                      <p1:X>0</p1:X>
                      <p1:Y1>1</p1:Y1>
                      <p1:Y2>0</p1:Y2>
                      <p1:Z>0</p1:Z>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>GoToPosition</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="38" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="8" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="34" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="16" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="34" Label="Source2" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="24" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source2" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="34" Label="Source3" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="32" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source2" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="34" Label="Source4" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="38" Label="Source2" />
                  <Edge From="36" To="37" Label="Source1" />
                  <Edge From="37" To="38" Label="Source3" />
                  <Edge From="38" To="39" Label="Source1" />
                  <Edge From="40" To="41" Label="Source1" />
                  <Edge From="40" To="42" Label="Source1" />
                  <Edge From="40" To="44" Label="Source2" />
                  <Edge From="41" To="45" Label="Source1" />
                  <Edge From="42" To="45" Label="Source2" />
                  <Edge From="43" To="44" Label="Source1" />
                  <Edge From="44" To="45" Label="Source3" />
                  <Edge From="45" To="46" Label="Source1" />
                  <Edge From="46" To="47" Label="Source1" />
                  <Edge From="47" To="48" Label="Source1" />
                  <Edge From="48" To="49" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping">
              <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:TableLayoutPanelVisualizer" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>PositionControl</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="gui:ButtonBuilder">
                    <gui:Name>Home</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Font>Microsoft Sans Serif, 36pt</gui:Font>
                    <gui:Text>Home</gui:Text>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:ButtonVisualizer" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ManipulatorPosition</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Slice">
                      <rx:Start>0</rx:Start>
                      <rx:Step>10</rx:Step>
                      <rx:Stop xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="AutoRefresh" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="gui:PropertyGridBuilder">
                    <gui:Name>CurrentPosition</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Font>Microsoft Sans Serif, 22pt</gui:Font>
                    <gui:HelpVisible>false</gui:HelpVisible>
                    <gui:ToolbarVisible>true</gui:ToolbarVisible>
                    <gui:AutoRefresh>true</gui:AutoRefresh>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:PropertyGridVisualizer" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsHomed</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Enabled" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="gui:ButtonBuilder">
                    <gui:Name>SetPosition</gui:Name>
                    <gui:Enabled>false</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Font>Microsoft Sans Serif, 36pt</gui:Font>
                    <gui:Text>Set position</gui:Text>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:ButtonVisualizer" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsMoving</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>GenerateLabel</scr:Name>
                    <scr:Expression>it ? "Moving..." : "Idle"</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Text" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="gui:ButtonBuilder">
                    <gui:Name>IsMoving</gui:Name>
                    <gui:Enabled>false</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Font>Microsoft Sans Serif, 36pt</gui:Font>
                    <gui:Text>Moving...</gui:Text>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:ButtonVisualizer" />
                  </Expression>
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Name>PositionControl</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>1</gui:ColumnCount>
                    <gui:RowCount>4</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles />
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="X" Category="SetPosition" />
                    <Property Name="Y1" Category="SetPosition" />
                    <Property Name="Y2" Category="SetPosition" />
                    <Property Name="Z" Category="SetPosition" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ManipulatorPosition</Name>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="X" Selector="X" />
                      <Property Name="Y1" Selector="Y1" />
                      <Property Name="Y2" Selector="Y2" />
                      <Property Name="Z" Selector="Z" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:ManipulatorPosition">
                      <p1:X>2146</p1:X>
                      <p1:Y1>0</p1:Y1>
                      <p1:Y2>0</p1:Y2>
                      <p1:Z>0</p1:Z>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="17" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="17" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="17" Label="Source3" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source4" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="19" To="22" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping">
              <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:TableLayoutPanelVisualizer" />
            </Expression>
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name>ManipulatorInterface</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>2</gui:ColumnCount>
              <gui:RowCount>2</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles>
                <gui:RowStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Height>0.2</gui:Height>
                </gui:RowStyle>
                <gui:RowStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Height>0.8</gui:Height>
                </gui:RowStyle>
              </gui:RowStyles>
              <gui:CellSpans>
                <gui:CellSpan ColumnSpan="2" RowSpan="1" />
              </gui:CellSpans>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="8" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="8" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source3" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>